PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Name': u'Leo'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine reset
    TextComponent Fixation_point
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine Fixation_point_2
    TextComponent text_3
      color = red
      text = +
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine feedback
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1.replace('...', $TW) +
        '\n\n' +
        'P2: ' + $premise2.replace('...', $TW) +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
  Routine question
    TextComponent question_text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.09
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      text:
        La conclusione segue dalla premesse?
    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'q', '+'
      startVal [time (s)] = 0.0
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    TextComponent response_to_question
      color = yellow
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        [q] <- SI          NO -> [+]
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.09
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      text:
                            Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        shuffleRows.ShuffleRows(file_input, file_output)
    TextComponent text_4
      color = yellow
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        Premere la barra spaziatrice per continuare
  Routine arguments
    TextComponent text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1 +
        '\n\n' +
        'P2: ' + $premise2 +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentType': u'TPTC', 'ArgumentNumber': 1, 'TWType': u'V', 'TW': u'SAMBA', 'premise2': u'Una ... \xe8 vivace ', 'premise1': u'La gioia \xe8 una ... ', 'conclusion': u'La gioia \xe8 vivace', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPFC', 'ArgumentNumber': 2, 'TWType': u'V', 'TW': u'SCIALUPPA', 'premise2': u'Una ... Scende dalla nave ', 'premise1': u'Il conforto \xe8 una ... ', 'conclusion': u'Il conforto scende dalla nave', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 2, 'TWType': u'distrattore', 'TW': u'MOGLIE', 'premise2': u'Una ... \xe8 una donna sposata ', 'premise1': u'Luigi ha una ... ', 'conclusion': u'Luigi \xe8 una donna sposata', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 1, 'TWType': u'distrattore', 'TW': u'MEDICINA', 'premise2': u'... \xe8 una scienza ', 'premise1': u'Franco studia ...  ', 'conclusion': u'Franco studia una scienza', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPPC', 'ArgumentNumber': 2, 'TWType': u'L', 'TW': u'APPRODO', 'premise2': u'Un ... consente il riposo ', 'premise1': u'La laurea \xe8 un ... ', 'conclusion': u'La laurea consente il riposo', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'}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
    Routine arguments
    Routine feedback
    Routine question
    Routine Fixation_point_2
  LoopTerminator trials
